PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1536, 864]
  expName = tutorial_7
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon_2
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine response
    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Report the delay between the key press and the tilt of the rectangle (0-999); Click submit after entering the value
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3,0.1)
      startVal [time (s)] = 0
      text = Submit
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  Routine angle
    PolygonComponent rectangle
      fillColor = white
      ori [set every repeat] = angle
      shape = rectangle
      size = (0.05, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_file.xlsx
    loopType = random
    nReps = 25
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    conditions:
      [{'delay': 0.1, 'angle': 40, 'condition': 'unexp'},
      {'delay': 0.4, 'angle': 40, 'condition': 'unexp'},
      {'delay': 0.7, 'angle': 40, 'condition': 'unexp'},
      {'delay': 0.1, 'angle': 140, 'condition': 'exp'},
      {'delay': 0.4, 'angle': 140, 'condition': 'exp'},
      {'delay': 0.7, 'angle': 140, 'condition': 'exp'},
      {'delay': 0.1, 'angle': 140, 'condition': 'exp'},
      {'delay': 0.4, 'angle': 140, 'condition': 'exp'},
      {'delay': 0.7, 'angle': 140, 'condition': 'exp'},
      {'delay': 0.1, 'angle': 140, 'condition': 'exp'},
      {'delay': 0.4, 'angle': 140, 'condition': 'exp'},
      {'delay': 0.7, 'angle': 140, 'condition': 'exp'},
      {'delay': 0.1, 'angle': 140, 'condition': 'exp'},
      {'delay': 0.4, 'angle': 140, 'condition': 'exp'},
      {'delay': 0.7, 'angle': 140, 'condition': 'exp'},
      {'delay': 0.1, 'angle': 140, 'condition': 'exp'}]
    Routine trial
    Routine angle
    Routine response
  LoopTerminator trials
